PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = EventTask
  logging level = debug
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Routines
  Routine experiment
    TextComponent trial_instructions
      color = black
      letterHeight = 30
      pos = (0,-300)
      startVal [time (s)] = 0
      text = C = “YES”             N = “NO”
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'c','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    ImageComponent image
      image [set every repeat] = $file
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        breaktime=0
      Begin Routine:
        if (experiment_trials.thisTrialN+1)%129==0:
            breaktime=1
  Routine practice
    TextComponent trial_instructions_practice
      color = black
      letterHeight = 30
      pos = (0,-300)
      startVal [time (s)] = 0
      text = C = “YES”             N = “NO”
      units = pix
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    KeyboardComponent key_resp_practice
      allowedKeys = 'c','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    ImageComponent image_practice
      image [set every repeat] = $file
      startVal [time (s)] = 0
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  Routine instructions
    TextComponent task_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Event Task!

        You will see a series of pictures. For each picture, you will answer the question:
        Is this something that might normally happen?

        Use your keyboard to respond.
        Hit ‘C’ if the answer is YES.
        Hit ‘N’ if the answer is NO.

        We will start with a series of practice items.

        Press the space bar when you are ready.
    KeyboardComponent continue2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine standardizingRTs
    TextComponent std_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the next task, you will press:
        “C” for YES
        “N” for NO

        We will practice this a few times before continuing.

        Press the space bar when you are ready.
    KeyboardComponent continue1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stdRT_loop
    KeyboardComponent key_resp_stdRT
      allowedKeys = 'c','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimulus
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    TextComponent RT_trial_instructions
      color = black
      letterHeight = 30
      pos = (0, -300)
      startVal [time (s)] = 0.0
      text = C = “YES”             N = “NO”
      units = pix
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  Routine header_practice
    TextComponent practice_block
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Practice Block
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    KeyboardComponent continue3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine header_experiment
    TextComponent experiment_block
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Experiment Block
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    KeyboardComponent continue4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the Event Task.

        Thank you!
    KeyboardComponent continue5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakblock
    ImageComponent breaking
      image = breakfile.jpg
      startVal [time (s)] = 0
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    KeyboardComponent continue6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        breaktime=0
Flow
  Routine standardizingRTs
  LoopInitiator stdRT_trials loopType="TrialHandler"
    conditionsFile = standardizingRTs.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimulus', "Press the 'yes' key."), ('corrAns', 'c')]),
      OrderedDict([('stimulus', "Press the 'no' key."), ('corrAns', 'n')])]
    Routine stdRT_loop
  LoopTerminator stdRT_trials
  Routine instructions
  Routine header_practice
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'practice_images/balancing on umbrella.jpg'), ('stimulus', 'balancing on umbrella.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/bikini woman gun.jpg'), ('stimulus', 'bikini woman gun.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/sawing apple.jpg'), ('stimulus', 'sawing apple.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/dog pilot.jpg'), ('stimulus', 'dog pilot.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/man with paper in mouth.jpg'), ('stimulus', 'man with paper in mouth.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/throwing noodles.jpg'), ('stimulus', 'throwing noodles.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/boss bably.jpg'), ('stimulus', 'boss bably.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')]),
      OrderedDict([('file', 'practice_images/underwater skateboard.jpg'), ('stimulus', 'underwater skateboard.jpg'), ('condition', 'implausible'), ('block', 'practice'), ('corrAns', 'n')])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
    Routine practice
  LoopTerminator practice_trials
  Routine header_experiment
  LoopInitiator experiment_trials loopType="TrialHandler"
    conditionsFile = experiment.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'images/man_office war sandbags.jpg'), ('stimulus', 'man_office war sandbags.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/USB plugged into hair.jpg'), ('stimulus', 'USB plugged into hair.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/salting turf.jpg'), ('stimulus', 'salting turf.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/man_home office.jpg'), ('stimulus', 'man_home office.jpg'), ('condition', 'Plausible'), ('block', 1), ('corrAns', 'c')]),
      OrderedDict([('file', 'images/office presentation in desert.jpg'), ('stimulus', 'office presentation in desert.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/person walking on car.jpg'), ('stimulus', 'person walking on car.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/pope drilling.jpg'), ('stimulus', 'pope drilling.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/woman singing into sunflower.jpg'), ('stimulus', 'woman singing into sunflower.jpg'), ('condition', 'Implausible'), ('block', 1), ('corrAns', 'n')]),
      OrderedDict([('file', 'images/man_golfing.jpg'), ('stimulus', 'man_golfing.jpg'), ('condition', 'Plausible'), ('block', 1), ('corrAns', 'c')])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
    Routine experiment
    LoopInitiator breaktrials loopType="TrialHandler"
      loopType = random
      nReps = breaktime
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      Routine breakblock
    LoopTerminator breaktrials
  LoopTerminator experiment_trials
  Routine end
